PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['bank-1300155_640.png']
  Screen = 1
  Units = pix
  Window size (pixels) = [3200, 1800]
  expName = screen_scale
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000

            # Added manually
            if win.units=='pix':
                vsize=win.size[1]

            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.07
      pos = (0, .6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.07
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine rectangle
    TextComponent text
      letterHeight = 0.07
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_1
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine check_status
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        text_2.text = str(x_scale) + '\n' + str(y_scale) + '\n' + str(vsize) + '\n' + str(screen_height)
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Fin
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_intro
    CodeComponent set_variables
      Code Type = Auto->JS
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      Begin Experiment:
        target_class = "cat"
        non_target_classes = [
            "dog",
            "elephant",
            "tiger",
            "rabbit",
            "kangaroo",
            "sheep",
            "monkey",
            "lion",
            "bear",
            "fox",
            "pig",
            "otter",
        ]

        hw_rate = win.size[1] / win.size[0]
    CodeComponent calc_ecc
      Code Type = Auto->JS
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      Before Experiment:
        import math
      Begin Experiment:
        eccentricity_level_1 = round(math.sqrt(2), 2)
        eccentricity_level_2 = round(1 + math.sqrt(8), 2)
        eccentricity_level_3 = round((math.sqrt(2) + 4 + math.sqrt((math.sqrt(2) + 4) ** 2 - 4 * (4 * math.sqrt(2) - 27))) / 2, 2)
        eccentricities = [
            eccentricity_level_1,
            eccentricity_level_2,
            eccentricity_level_3
        ]
    CodeComponent calc_deg2norm
      Code Type = Both
      Begin Experiment:
        import math

        # Local
        # imac
        # VA = round(360 / pi * math.atan2(33.5, 2 * 57))
        # macbook
        VA = round(360 / pi * math.atan2(17.9, 2 * 57))

        # Online
        # VA = round(360 / pi * math.atan2(screen_height, 2 * 57))

        deg2norm = 2 / VA
      Begin JS Experiment:
        var VA;
        VA = Math.round(((360 / Math.PI) * Math.atan2(33.5, (2 * 57))));
        deg2norm = 2 / VA
    ImageComponent image_0_0
      image = html/resources/imagenet/bear/image01.png
      size = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_0_1
      image = html/resources/imagenet/cat/image01.png
      size = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_0_2
      image = html/resources/imagenet/dog/image01.png
      size = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_0_3
      image = html/resources/imagenet/elephant/image01.png
      size = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_0
      image = html/resources/imagenet/fox/image01.png
      size = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_1
      image = html/resources/imagenet/kangaroo/image01.png
      size = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_2
      image = html/resources/imagenet/lion/image01.png
      size = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_3
      image = html/resources/imagenet/monkey/image01.png
      size = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_0
      image = html/resources/imagenet/otter/image01.png
      size = (2 * 2 * deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_1
      image = html/resources/imagenet/pig/image01.png
      size = (2 * 2 * deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_2
      image = html/resources/imagenet/rabbit/image01.png
      size = (2 * 2 *deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_3
      image = html/resources/imagenet/sheep/image01.png
      size = (2 * 2 * deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent set_image_position
      Code Type = Auto->JS
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      Before Experiment:
        from  PIL import Image
      Begin Routine:
        image_list = [
            image_0_0,
            image_0_1,
            image_0_2,
            image_0_3,
            image_1_0,
            image_1_1,
            image_1_2,
            image_1_3,
            image_2_0,
            image_2_1,
            image_2_2,
            image_2_3
        ]

        for i in range(len(image_list)):
            if i < 4:
                image_list[i].pos = (
                    hw_rate * deg2norm * eccentricity_level_1 * math.cos(math.radians(i % 4 * 90 + 45)),
                    deg2norm * eccentricity_level_1 * math.sin(math.radians(i % 4 * 90 + 45))
                )
            elif 4 <= i < 8:
                image_list[i].pos = (
                    hw_rate * deg2norm * eccentricity_level_2 * math.cos(math.radians(i % 4 * 90)),
                    deg2norm * eccentricity_level_2 * math.sin(math.radians(i % 4 * 90))
                )
            else:
                image_list[i].pos = (
                    hw_rate * deg2norm * eccentricity_level_3 * math.cos(math.radians(i % 4 * 90 + 45)),
                    deg2norm * eccentricity_level_3 * math.sin(math.radians(i % 4 * 90 + 45))
                )
    PolygonComponent fixation_point
      fillColor = $(0.5059, 0.5059, 0.5059)
      lineColor = $(0.5059, 0.5059, 0.5059)
      nVertices = 100
      shape = regular polygon...
      size = (deg2norm / 5 * hw_rate, deg2norm / 5)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent introduction_text
      letterHeight = deg2norm * 0.5
      pos = (0.6, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every frame]:
        This is the example of the stimuli.

        Before the stimuli presented,
        the fixation point is shown.

        When you hit 'space' Key,
        stimuli are presented.

        After that, you can move your eye.

        When you find the 'cat',
        hit a Key and answer the question,
        'Where was the cat?'

        You answer with the keyboard.

        Notice:
        - When the stimuli are presented,
        focus on the center of the display.
        - Constantly look at the display from 57cm away.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_intro
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Let's practice with some stimuli.

        Hit a Key when ready.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_trial
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        text_4.text = str(thisTrial["size"]) + "\n" + str(thisTrial["rate"]) + "\n" + str(thisTrial["pos"]) + "\n" + str(thisTrial["ori"])
  Routine practice_trial
    CodeComponent change_nontarget_p
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        _non_target_classes = random.sample(non_target_classes, len(non_target_classes))
        for i in range(len(image_list)):
            image_path = "html/resources/imagenet/" + _non_target_classes[i] + "/image" + str(random.randrange(101, 151))[1:] + ".png"
            image_list[i].image = Image.open(image_path)
    CodeComponent change_target_p
      Code Type = Auto->JS
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      Begin Routine:
        image_path = "html/resources/imagenet/" + target_class + "/image" + str(random.randrange(101, 151))[1:] + ".png"
        image_list[4 * thisPracticeTrial["pos"] + thisPracticeTrial["ori"]].image = Image.open(image_path)
    CodeComponent change_size_rate
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(len(image_list)):
            image_list[i].size = (thisPracticeTrial["size"] * deg2norm, thisPracticeTrial["size"] * deg2norm)
            if 4 <= i < 8:
                image_list[i].size = (thisPracticeTrial["rate"] * image_list[i].size[0], thisPracticeTrial["rate"] * image_list[i].size[1])
            elif i >= 8:
                image_list[i].size = ((thisPracticeTrial["rate"] ** 2) * image_list[i].size[0], (thisPracticeTrial["rate"] ** 2) * image_list[i].size[1])
            image_list[i].size[0] *= hw_rate
    CodeComponent draw_and_flip
      Code Type = Auto->JS
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      Each Frame:
        for i in range(len(image_list)):
            image_list[i].draw()

        fixation_point.draw()
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = deg2norm * 0.5
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        text_5.text = str(thisPracticeTrial["size"]) + "\n" + str(thisPracticeTrial["rate"]) + "\n" + str(thisPracticeTrial["pos"]) + "\n" + str(thisPracticeTrial["ori"])
  Routine practice_question
    ImageComponent stimuli_arrangement
      image = html/resources/stimuli_arrangement.png
      size = (deg2norm, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent change_stim_size
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_arrangement.size = (
            hw_rate * (2 * eccentricity_level_2 / math.sqrt(2) + 8) * deg2norm,
            (2 * eccentricity_level_2 / math.sqrt(2) + 8) * deg2norm,
        )
    CodeComponent place_alphabet
      Code Type = Auto->JS
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      Begin Experiment:
        keys = [["b", "a", "c", "d"], ["f", "e", "g", "h"], ["j", "i", "k", "l"]]
        keys_list = []
      Each Frame:
        for i in range(len(keys)):
            for j in range(len(keys[i])):
                key = visual.TextStim(
                    win,
                    text='A',
                    pos=(0, 0),
                    height=deg2norm * 1.5,
                )
                keys_list.append(key)

        for i in range(len(keys_list)):
            keys_list[i].pos = (
                hw_rate * deg2norm * eccentricities[i  % 3] * math.cos(math.radians(i % 4 * 90 + ((i + 1) % 2) * 45)),
                deg2norm * eccentricities[i % 3] * math.sin(math.radians(i % 4 * 90 + ((i + 1) % 2) * 45)),
            )
            keys_list[i].draw()
    TextComponent question_text
      letterHeight = deg2norm * 0.5
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Where Was the cat?
        Please press the Key
        corresponding to the position.
    KeyboardComponent key_resp
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine screen_scale
  Routine rectangle
  Routine check_status
  Routine exp_intro
  Routine practice_intro
  LoopInitiator PracticeTrials loopType="TrialHandler"
    conditionsFile = practiceConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'size': 1, 'rate': 1, 'pos': 0, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 2},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 0},
      {'size': 2, 'rate': 2, 'pos': 0, 'ori': 1},
      {'size': 2, 'rate': 2, 'pos': 1, 'ori': 2},
      {'size': 2, 'rate': 2, 'pos': 2, 'ori': 3}]
    Routine practice_trial
    Routine practice_question
  LoopTerminator PracticeTrials
  LoopInitiator ExpTrials loopType="TrialHandler"
    conditionsFile = expConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'size': 1, 'rate': 1, 'pos': 0, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 0, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 2},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 3},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 0, 'ori': 2},
      {'size': 1, 'rate': 1, 'pos': 0, 'ori': 3},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 2},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 1},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 1},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 1},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 0},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 2},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 0},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 2},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 0},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 2}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
    Routine exp_trial
  LoopTerminator ExpTrials
